####################################################
# Geometry 
####################################################
# World:
s:Ge/World/Type = "TsBox"
s:Ge/World/Material = "Vacuum"
b:Ge/World/Invisible = "TRUE"

# TestBox:
s:Ge/myBox/Type = "TsBox"
s:Ge/myBox/Parent  = "World"
s:Ge/myBox/Material = "G4_WATER"
d:Ge/myBox/HLX = 2.5 cm
d:Ge/myBox/HLY = 2.5 cm
d:Ge/myBox/HLZ = 2.5 cm
d:Ge/myBox/TransX = 0. m
d:Ge/myBox/TransY = 0. m
d:Ge/myBox/TransZ = -1. m
d:Ge/myBox/RotX = 0. deg
d:Ge/myBox/RotY = 0. deg
d:Ge/myBox/RotZ = 0. deg

#i:Ge/myBox/XBins = 2
#i:Ge/myBox/YBins = 2
#i:Ge/myBox/ZBins = 2

# BeamPosition:
s:Ge/BeamPosition/Type = "Group"
s:Ge/BeamPosition/Parent  = "World"
d:Ge/BeamPosition/TransX = 0. m
d:Ge/BeamPosition/TransY = 0. m
d:Ge/BeamPosition/TransZ = 1. m


####################################################
# Scoring
####################################################
# PhaseSpace
s:Sc/MyScorer/Quantity = "PhaseSpace"
i:Sc/MyScorer/ZBins = 100
b:Sc/MyScorer/OutputToConsole = "True"
b:Sc/MyScorer/Visualize = "True"
#s:Sc/MyScorer/Surface = "myBox/ZMinusSurface"
s:Sc/MyScorer/Component = "myBox"
s:Sc/MyScorer/OutputType = "CSV"
s:Sc/MyScorer/OutputFile = "OutputPositionPicoBragg"
s:Sc/MyScorer/IfOutputFileAlreadyExists = "Overwrite"
#b:Sc/MyScorer/IncludeTOPASTime = "True" 
#b:Sc/MyScorer/IncludeTimeOfFlight = "True"
#b:Sc/MyScorer/IncludeRunID = "True"
b:Sc/MyScorer/IncludeEventID = "True"
#b:Sc/MyScorer/IncludeTrackID = "True"
#b:Sc/MyScorer/IncludeParentID = "True"
#b:Sc/MyScorer/IncludeCharge = "True"
#b:Sc/MyScorer/IncludeCreatorProcess = "True"
b:Sc/MyScorer/IncludeVertexInfo = "True"
#b:Sc/MyScorer/IncludeSeed = "True"
sv:Sc/MyScorer/OnlyIncludeParticlesNamed = 1 "Proton"


####################################################
# Beam Source
####################################################
s:So/MySource/Type = "Beam" 
s:So/MySource/Component = "BeamPosition"
s:So/MySource/BeamParticle = "proton"
s:So/MySource/BeamPositionDistribution = "None"
#s:So/MySource/BeamPositionCutoffShape = "Ellipse"
#d:So/MySource/BeamPositionCutoffX = 10. cm
#d:So/MySource/BeamPositionCutoffY = 10. cm
#d:So/MySource/BeamPositionSpreadX = 0.65 cm
#d:So/MySource/BeamPositionSpreadY = 0.65 cm
s:So/MySource/BeamAngularDistribution = "None" 
#d:So/MySource/BeamAngularCutoffX = 90. deg
#d:So/MySource/BeamAngularCutoffY = 90. deg
#d:So/MySource/BeamAngularSpreadX = 0.0032 rad
#d:So/MySource/BeamAngularSpreadY = 0.0032 rad
s:So/MySource/BeamEnergySpectrumType = "Discrete"
dv:So/MySource/BeamEnergySpectrumValues = 1 75.0 MeV
uv:So/MySource/BeamEnergySpectrumWeights = 1 1.0
i:So/MySource/NumberOfHistoriesInRun = 1000
#i:So/MySource/NumberOfHistoriesInRandomJob = 0


####################################################
# Visualization
####################################################
s:Gr/MyOGL/Type = "OpenGL"
i:Gr/MyOGL/WidnowSizeX = 600
i:Gr/MyOGL/WindowSizeY = 600
d:Gr/MyOGL/Theta = 90 deg
d:Gr/MyOGL/Phi = 20 deg
#s:Gr/MyOGL/Projection = "Perspective"
#d:Gr/MyOGL/PerspectiveAngle = 60 deg
b:Gr/Enable = "True"
i:Gr/Verbosity = 2
s:Gr/RefreshEvery = "Run"
#b:Gr/MyOGL/CopyOpenGLToPDF = "TRUE"

sv:Ph/Default/Modules = 1 "g4em-standard_opt0"
b:Ts/PauseBeforeQuit = "True"